// Description: elastixpaper, affine

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(FixedSmoothingImagePyramidSchedule 1 1 1)
(MovingImagePyramid "MovingSmoothingImagePyramid")
(MovingSmoothingImagePyramidSchedule 1 1 1)

(Interpolator "BSplineInterpolator")

(Metric "NormalizedMutualInformation")
(ShowExactMetricValue "true")
(ExactMetricSampleGridSpacing 1 1 1)

(Optimizer "ConjugateGradient")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AdvancedAffineTransform")

(ErodeMask "false")

//Scales estimation of the parameters
(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "false")
(AutomaticTransformInitializationMethod "CenterOfGravity")

(NumberOfResolutions 1)

(HowToCombineTransforms "Compose")

(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "tiff")
(WriteResultImageAfterEachResolution "true") 
(WriteTransformParametersEachIteration "true")
(WriteTransformParametersEachResolution "true")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000)

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(NumberOfFixedHistogramBins 32 )
(NumberOfMovingHistogramBins 32 )
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)

// sampler:
(ImageSampler "Grid")
(SampleGridSpacing 2 2 2)

(FixedImageBSplineInterpolationOrder 1 )
(UseRandomSampleRegion "false")
(SampleRegionSize 20.0)
(CheckNumberOfSamples "false")
(NewSamplesEveryIteration "true" )

//Number of spatial samples used to compute the mutual information in each resolution level:
(NumberOfSpatialSamples 2000 )

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1 )

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 2000.0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 200.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6 ) 

(UseFastAndLowMemoryVersion "true")
